CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:115
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:and (directory doesnot containregexp "[\\\\/]\\.")

Metadata:[module_num:2|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notes:['The Metadata module optionally allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file.', '', 'LT: If file name starts from something different than TileScan 0-9 then change it in regular expression.']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:(?P<Drug>.*)_(?P<Conc>.*)_(?P<Rep>.*)_R(?P<Field>[0-9])_(?P<Channel>.*).tif
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{'BF': 'Drug', 'Tub': 'Drug', 'Hoechst': 'Drug', 'Merge': 'Drug', 'Mitochondria': 'Drug', 'Mito': 'Drug', 'CellS': 'Drug', 'CellB': 'Drug'}, {'BF': 'Conc', 'Tub': 'Conc', 'Hoechst': 'Conc', 'Merge': 'Drug', 'Mitochondria': 'Conc', 'Mito': 'Conc', 'CellS': 'Conc', 'CellB': 'Conc'}, {'BF': 'Field', 'Tub': 'Field', 'Hoechst': 'Field', 'Merge': 'Field', 'Mitochondria': 'Field', 'Mito': 'Field', 'CellS': 'Field', 'CellB': 'Field'}, {'BF': 'Rep', 'Hoechst': 'Rep', 'Tub': 'Rep', 'Merge': 'Rep', 'Mitochondria': 'Rep', 'Mito': 'Rep', 'CellS': 'Rep', 'CellB': 'Rep'}]
    Image set matching method:Metadata
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    Assignments count:8
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "ch04.")
    Name to assign these images:BF
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ch00.")
    Name to assign these images:Mito
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ch01.")
    Name to assign these images:Hoechst
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "ch02.")
    Name to assign these images:Tub
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "_masks.")
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    Name to assign these objects:CellS
    Select the image type:Objects
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    Select the rule criteria:and (file does contain "ch00merged.")
    Name to assign these images:Merge
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "masksmito.")
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    Name to assign these objects:Mitochondria
    Select the image type:Objects
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    Select the rule criteria:and (file does contain "masksbig.")
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    Name to assign these objects:CellB
    Select the image type:Objects
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
FilterObjects:[module_num:5|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notes:['Remove cells touching border']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
    Select the objects to filter:CellB
    Name the output objects:CellB1
    Select the filtering mode:Image or mask border
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    Additional object count:0
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    Keep removed objects as a separate set?:No
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
FilterObjects:[module_num:6|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notes:['Remove cells touching border']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
    Select the objects to filter:CellS
    Name the output objects:CellS1
    Select the filtering mode:Image or mask border
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    Additional object count:0
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    Keep removed objects as a separate set?:No
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
RelateObjects:[module_num:7|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notes:['Find how many mall cells within big and calculate their area', 'Relate merged small cells with big cells']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
    Parent objects:CellB1
    Child objects:CellS1
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
FilterObjects:[module_num:8|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
    Select the objects to filter:CellB1
    Name the output objects:MasksCellB1
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Children_CellS1_Count
    Filter using a minimum measurement value?:Yes
    Minimum value:1
    Filter using a maximum measurement value?:No
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
MaskObjects:[module_num:9|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notes:['Find how many mall cells within big and calculate their area.', 'Mask to relate only cells with 0.8 overlap']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
    Select objects to be masked:CellS1
    Name the masked objects:CellSInB1
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:MasksCellB1
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    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.8
    Numbering of resulting objects:Renumber
    Invert the mask?:No

RelateObjects:[module_num:10|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
    Parent objects:MasksCellB1
    Child objects:CellSInB1
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
FilterObjects:[module_num:11|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
    Select the objects to filter:MasksCellB1
    Name the output objects:MasksCellB2
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Children_CellSInB1_Count
    Filter using a minimum measurement value?:No
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    Filter using a maximum measurement value?:Yes
    Maximum value:1
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
MaskObjects:[module_num:12|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
    Select objects to be masked:CellS1
    Name the masked objects:CellS2
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:MasksCellB2
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    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.2
    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

DefineGrid:[module_num:13|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enabled:False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
    Name the grid:Grid
    Number of rows:8
    Number of columns:12
    Location of the first spot:Top left
    Order of the spots:Rows
    Define a grid for which cycle?:Each cycle
    Select the method to define the grid:Automatic
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    Select the method to define the grid manually:Mouse
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    Coordinates of the first cell:0,0
    Row number of the first cell:1
    Column number of the first cell:1
    Coordinates of the second cell:0,0
    Row number of the second cell:1
    Column number of the second cell:1
    Retain an image of the grid?:No
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    Use a previous grid if gridding fails?:No

GrayToColor:[module_num:14|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
    Select a color scheme:Composite
    Rescale intensity:Yes
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    Name the output image:ColorImage
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    Hidden:3
    Image name:Hoechst
    Color:cyan
    Weight:0.5
    Image name:Tub
    Color:white
    Weight:1
    Image name:Mito
    Color:#FF0080
    Weight:1

SaveImages:[module_num:15|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
    Select the type of image to save:Image
    Select the image to save:ColorImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:Mito
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|Color
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

IdentifyPrimaryObjects:[module_num:16|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
    Select the input image:Hoechst
    Name the primary objects to be identified:NucleiS
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
    Size of smoothing filter:4
    Suppress local maxima that are closer than this minimum allowed distance:5.0
    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:3
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.05,1.0
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    Size of adaptive window:70
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    Thresholding method:Sauvola

IdentifyPrimaryObjects:[module_num:17|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
    Select the input image:Hoechst
    Name the primary objects to be identified:NucleiB
    Typical diameter of objects, in pixel units (Min,Max):40,160
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:3
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.05,1.0
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    Log transform before thresholding?:Yes
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    Size of adaptive window:160
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    Thresholding method:Minimum Cross-Entropy

MeasureObjectSizeShape:[module_num:18|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
    Select object sets to measure:NucleiB, NucleiS
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

OverlayOutlines:[module_num:19|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Hoechst
    Name the output image:NucleiOverlay1
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#80FF00
    Select objects to display:NucleiB
    Select outline color:cyan
    Select objects to display:NucleiS

DisplayDataOnImage:[module_num:20|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
    Display object or image measurements?:Object
    Select the input objects:NucleiS
    Measurement to display:AreaShape_Area
    Select the image on which to display the measurements:NucleiOverlay1
    Text color:white
    Name the output image that has the measurements displayed:DisplayImage1
    Font size (points):10
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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    Font:Arial
    Use scientific notation?:No
    Font weight:normal

DisplayDataOnImage:[module_num:21|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
    Display object or image measurements?:Object
    Select the input objects:NucleiB
    Measurement to display:AreaShape_Area
    Select the image on which to display the measurements:DisplayImage1
    Text color:white
    Name the output image that has the measurements displayed:DisplayImage2
    Font size (points):10
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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    Font:Arial
    Use scientific notation?:No
    Font weight:normal

SaveImages:[module_num:22|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
    Select the type of image to save:Image
    Select the image to save:DisplayImage2
    Select method for constructing file names:From image filename
    Select image name for file prefix:Hoechst
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_1
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|NucleiSegmantation
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

FilterObjects:[module_num:23|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
    Select the objects to filter:NucleiS
    Name the output objects:NucleiS1
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:300
    Filter using a maximum measurement value?:No
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
RelateObjects:[module_num:24|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
    Parent objects:CellS2
    Child objects:NucleiS1
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
FilterObjects:[module_num:25|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
    Select the objects to filter:CellS2
    Name the output objects:MasksCellS1
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Children_NucleiS1_Count
    Filter using a minimum measurement value?:Yes
    Minimum value:1
    Filter using a maximum measurement value?:No
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
MaskObjects:[module_num:26|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
    Select objects to be masked:NucleiS1
    Name the masked objects:NucleiSInCellS2
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:MasksCellS1
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    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.8
    Numbering of resulting objects:Renumber
    Invert the mask?:No

OverlayOutlines:[module_num:27|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notes:['Save intitial segmentation for cell']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Merge
    Name the output image:CellsOverlay1
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#80FF00
    Select objects to display:CellB1
    Select outline color:cyan
    Select objects to display:CellS1
    Select outline color:#FF0080
    Select objects to display:NucleiB
    Select outline color:#FF8040
    Select objects to display:NucleiS1

SaveImages:[module_num:28|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
    Select the type of image to save:Image
    Select the image to save:CellsOverlay1
    Select method for constructing file names:From image filename
    Select image name for file prefix:Merge
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_1
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|CellSegmentation
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

DefineGrid:[module_num:29|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enabled:False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
    Name the grid:Grid
    Number of rows:8
    Number of columns:12
    Location of the first spot:Top left
    Order of the spots:Rows
    Define a grid for which cycle?:Each cycle
    Select the method to define the grid:Automatic
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    Select the method to define the grid manually:Mouse
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    Coordinates of the first cell:0,0
    Row number of the first cell:1
    Column number of the first cell:1
    Coordinates of the second cell:0,0
    Row number of the second cell:1
    Column number of the second cell:1
    Retain an image of the grid?:No
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    Use a previous grid if gridding fails?:No

RelateObjects:[module_num:30|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
    Parent objects:CellB1
    Child objects:NucleiB
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
FilterObjects:[module_num:31|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
    Select the objects to filter:CellB1
    Name the output objects:MasksCellB3
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Children_NucleiB_Count
    Filter using a minimum measurement value?:Yes
    Minimum value:1
    Filter using a maximum measurement value?:No
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
RelateObjects:[module_num:32|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
    Parent objects:CellS2
    Child objects:NucleiB
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
FilterObjects:[module_num:33|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
    Select the objects to filter:CellB1
    Name the output objects:MasksCellS2
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Children_NucleiB_Count
    Filter using a minimum measurement value?:Yes
    Minimum value:1
    Filter using a maximum measurement value?:No
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
CombineObjects:[module_num:34|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
    Select initial object set:MasksCellB3
    Select object set to combine:MasksCellS2
    Select how to handle overlapping objects:Preserve
    Name the combined object set:MasksCell1

MaskObjects:[module_num:35|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
    Select objects to be masked:NucleiB
    Name the masked objects:NucleiB1
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:MasksCell1
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    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.9
    Numbering of resulting objects:Renumber
    Invert the mask?:No

DefineGrid:[module_num:36|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enabled:False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
    Name the grid:Grid
    Number of rows:8
    Number of columns:12
    Location of the first spot:Top left
    Order of the spots:Rows
    Define a grid for which cycle?:Each cycle
    Select the method to define the grid:Automatic
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    Select the method to define the grid manually:Mouse
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    Coordinates of the first cell:0,0
    Row number of the first cell:1
    Column number of the first cell:1
    Coordinates of the second cell:0,0
    Row number of the second cell:1
    Column number of the second cell:1
    Retain an image of the grid?:No
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    Use a previous grid if gridding fails?:No

RelateObjects:[module_num:37|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
    Parent objects:CellB1
    Child objects:NucleiB1
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
FilterObjects:[module_num:38|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
    Select the objects to filter:CellB1
    Name the output objects:MasksCellB5
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Children_NucleiB1_Count
    Filter using a minimum measurement value?:Yes
    Minimum value:1
    Filter using a maximum measurement value?:No
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
MaskObjects:[module_num:39|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
    Select objects to be masked:NucleiB1
    Name the masked objects:NucleiBInCellB1
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:MasksCellB5
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    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.9
    Numbering of resulting objects:Renumber
    Invert the mask?:No

RelateObjects:[module_num:40|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
    Parent objects:CellB1
    Child objects:NucleiBInCellB1
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
FilterObjects:[module_num:41|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
    Select the objects to filter:CellB1
    Name the output objects:CellsB1withNucB1
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Children_NucleiBInCellB1_Count
    Filter using a minimum measurement value?:Yes
    Minimum value:1
    Filter using a maximum measurement value?:No
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
RelateObjects:[module_num:42|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
    Parent objects:CellsB1withNucB1
    Child objects:NucleiBInCellB1
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
SplitOrMergeObjects:[module_num:43|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
    Select the input objects:NucleiBInCellB1
    Name the new objects:NucleiBTrueMerged1
    Operation:Merge
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    Merging method:Per-parent
    Select the parent object:CellsB1withNucB1
    Output object type:Disconnected

MeasureObjectSizeShape:[module_num:44|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
    Select object sets to measure:NucleiBTrueMerged1
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

RelateObjects:[module_num:45|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
    Parent objects:CellsB1withNucB1
    Child objects:NucleiBTrueMerged1
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
DefineGrid:[module_num:46|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enabled:False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
    Name the grid:Grid
    Number of rows:8
    Number of columns:12
    Location of the first spot:Top left
    Order of the spots:Rows
    Define a grid for which cycle?:Each cycle
    Select the method to define the grid:Automatic
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    Select the method to define the grid manually:Mouse
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    Coordinates of the first cell:0,0
    Row number of the first cell:1
    Column number of the first cell:1
    Coordinates of the second cell:0,0
    Row number of the second cell:1
    Column number of the second cell:1
    Retain an image of the grid?:No
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    Use a previous grid if gridding fails?:No

RelateObjects:[module_num:47|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
    Parent objects:CellsB1withNucB1
    Child objects:NucleiSInCellS2
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
FilterObjects:[module_num:48|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
    Select the objects to filter:CellsB1withNucB1
    Name the output objects:MasksCellB6
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Children_NucleiSInCellS2_Count
    Filter using a minimum measurement value?:Yes
    Minimum value:1
    Filter using a maximum measurement value?:No
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
MaskObjects:[module_num:49|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
    Select objects to be masked:NucleiSInCellS2
    Name the masked objects:NucleiSTrueInB1
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:MasksCellB6
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    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.9
    Numbering of resulting objects:Renumber
    Invert the mask?:No

RelateObjects:[module_num:50|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
    Parent objects:CellsB1withNucB1
    Child objects:NucleiSTrueInB1
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
SplitOrMergeObjects:[module_num:51|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
    Select the input objects:NucleiSTrueInB1
    Name the new objects:NucleiSTrueMerged1
    Operation:Merge
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    Merging method:Per-parent
    Select the parent object:CellsB1withNucB1
    Output object type:Disconnected

MeasureObjectSizeShape:[module_num:52|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
    Select object sets to measure:NucleiSTrueMerged1
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

RelateObjects:[module_num:53|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
    Parent objects:CellsB1withNucB1
    Child objects:NucleiSTrueMerged1
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
CalculateMath:[module_num:54|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
    Name the output measurement:NucAreaRatio
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:CellsB1withNucB1
    Select the numerator measurement:Mean_NucleiSTrueMerged1_AreaShape_Area
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:CellsB1withNucB1
    Select the denominator measurement:Mean_NucleiBTrueMerged1_AreaShape_Area
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
DefineGrid:[module_num:55|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enabled:False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
    Name the grid:Grid
    Number of rows:8
    Number of columns:12
    Location of the first spot:Top left
    Order of the spots:Rows
    Define a grid for which cycle?:Each cycle
    Select the method to define the grid:Automatic
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    Select the method to define the grid manually:Mouse
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    Coordinates of the first cell:0,0
    Row number of the first cell:1
    Column number of the first cell:1
    Coordinates of the second cell:0,0
    Row number of the second cell:1
    Column number of the second cell:1
    Retain an image of the grid?:No
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    Use a previous grid if gridding fails?:No

RelateObjects:[module_num:56|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
    Parent objects:CellsB1withNucB1
    Child objects:CellS2
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
FilterObjects:[module_num:57|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
    Select the objects to filter:CellsB1withNucB1
    Name the output objects:MasksCellB4
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Children_CellS2_Count
    Filter using a minimum measurement value?:Yes
    Minimum value:2
    Filter using a maximum measurement value?:No
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
MaskObjects:[module_num:58|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
    Select objects to be masked:CellS2
    Name the masked objects:CellS2inB1
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:MasksCellB4
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    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.8
    Numbering of resulting objects:Renumber
    Invert the mask?:No

RelateObjects:[module_num:59|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
    Parent objects:CellsB1withNucB1
    Child objects:CellS2inB1
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
SplitOrMergeObjects:[module_num:60|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
    Select the input objects:CellS2inB1
    Name the new objects:CellS2Merged1
    Operation:Merge
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    Merging method:Per-parent
    Select the parent object:CellsB1withNucB1
    Output object type:Disconnected

MeasureObjectSizeShape:[module_num:61|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
    Select object sets to measure:CellS2Merged1, CellsB1withNucB1
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

RelateObjects:[module_num:62|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
    Parent objects:CellsB1withNucB1
    Child objects:CellS2Merged1
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
CalculateMath:[module_num:63|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
    Name the output measurement:CellAreaRatio
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:CellsB1withNucB1
    Select the numerator measurement:Mean_CellS2Merged1_AreaShape_Area
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:CellsB1withNucB1
    Select the denominator measurement:AreaShape_Area
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
DefineGrid:[module_num:64|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enabled:False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
    Name the grid:Grid
    Number of rows:8
    Number of columns:12
    Location of the first spot:Top left
    Order of the spots:Rows
    Define a grid for which cycle?:Each cycle
    Select the method to define the grid:Automatic
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    Select the method to define the grid manually:Mouse
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    Coordinates of the first cell:0,0
    Row number of the first cell:1
    Column number of the first cell:1
    Coordinates of the second cell:0,0
    Row number of the second cell:1
    Column number of the second cell:1
    Retain an image of the grid?:No
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    Use a previous grid if gridding fails?:No

FilterObjects:[module_num:65|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
    Select the objects to filter:CellsB1withNucB1
    Name the output objects:MasksRemoveBig1
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:4
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Math_NucAreaRatio
    Filter using a minimum measurement value?:Yes
    Minimum value:0.3
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:Math_CellAreaRatio
    Filter using a minimum measurement value?:Yes
    Minimum value:0.6
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:Children_CellS2Merged1_Count
    Filter using a minimum measurement value?:Yes
    Minimum value:1
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:Children_NucleiSTrueMerged1_Count
    Filter using a minimum measurement value?:Yes
    Minimum value:1
    Filter using a maximum measurement value?:No
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
FilterObjects:[module_num:66|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
    Select the objects to filter:CellsB1withNucB1
    Name the output objects:MasksRemoveBig2
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:4
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Math_NucAreaRatio
    Filter using a minimum measurement value?:Yes
    Minimum value:0.6
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:Math_CellAreaRatio
    Filter using a minimum measurement value?:Yes
    Minimum value:0.3
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:Children_CellS2Merged1_Count
    Filter using a minimum measurement value?:Yes
    Minimum value:1
    Filter using a maximum measurement value?:No
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    Select the measurement to filter by:Children_NucleiSTrueMerged1_Count
    Filter using a minimum measurement value?:Yes
    Minimum value:1
    Filter using a maximum measurement value?:No
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
CombineObjects:[module_num:67|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
    Select initial object set:MasksRemoveBig1
    Select object set to combine:MasksRemoveBig2
    Select how to handle overlapping objects:Preserve
    Name the combined object set:MasksRemoveBig

DefineGrid:[module_num:68|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enabled:False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
    Name the grid:Grid
    Number of rows:8
    Number of columns:12
    Location of the first spot:Top left
    Order of the spots:Rows
    Define a grid for which cycle?:Each cycle
    Select the method to define the grid:Automatic
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    Select the method to define the grid manually:Mouse
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    Coordinates of the first cell:0,0
    Row number of the first cell:1
    Column number of the first cell:1
    Coordinates of the second cell:0,0
    Row number of the second cell:1
    Column number of the second cell:1
    Retain an image of the grid?:No
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    Use a previous grid if gridding fails?:No

MaskObjects:[module_num:69|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
    Select objects to be masked:CellsB1withNucB1
    Name the masked objects:CellsB1withNucB2
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:MasksRemoveBig
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    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.1
    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:70|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
    Select objects to be masked:CellB1
    Name the masked objects:CellB2
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:MasksRemoveBig
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    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.1
    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:71|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
    Select objects to be masked:NucleiB1
    Name the masked objects:NucleiB2
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:MasksRemoveBig
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    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.1
    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:72|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
    Select objects to be masked:CellS2
    Name the masked objects:CellS3
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CellsB1withNucB2
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    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.1
    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:73|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
    Select objects to be masked:NucleiS1
    Name the masked objects:NucleiS2
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CellsB1withNucB2
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    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.1
    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

DefineGrid:[module_num:74|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enabled:False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
    Name the grid:Grid
    Number of rows:8
    Number of columns:12
    Location of the first spot:Top left
    Order of the spots:Rows
    Define a grid for which cycle?:Each cycle
    Select the method to define the grid:Automatic
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    Select the method to define the grid manually:Mouse
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    Coordinates of the first cell:0,0
    Row number of the first cell:1
    Column number of the first cell:1
    Coordinates of the second cell:0,0
    Row number of the second cell:1
    Column number of the second cell:1
    Retain an image of the grid?:No
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    Use a previous grid if gridding fails?:No

RelateObjects:[module_num:75|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
    Parent objects:CellB2
    Child objects:CellS3
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
FilterObjects:[module_num:76|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
    Select the objects to filter:CellB2
    Name the output objects:CellB2withS3
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Children_CellS3_Count
    Filter using a minimum measurement value?:Yes
    Minimum value:1
    Filter using a maximum measurement value?:No
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
MaskObjects:[module_num:77|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
    Select objects to be masked:CellS3
    Name the masked objects:CellS3InB2
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CellB2withS3
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    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.8
    Numbering of resulting objects:Renumber
    Invert the mask?:No

RelateObjects:[module_num:78|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
    Parent objects:CellB2
    Child objects:CellS3InB2
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
SplitOrMergeObjects:[module_num:79|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
    Select the input objects:CellS3InB2
    Name the new objects:CellS3InB2Merged
    Operation:Merge
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    Merging method:Per-parent
    Select the parent object:CellB2
    Output object type:Disconnected

MeasureObjectSizeShape:[module_num:80|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
    Select object sets to measure:CellB2withS3, CellS3InB2Merged
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

RelateObjects:[module_num:81|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
    Parent objects:CellB2withS3
    Child objects:CellS3InB2Merged
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
CalculateMath:[module_num:82|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
    Name the output measurement:S3toB2Ratio
    Operation:Divide
    Select the numerator measurement type:Object
    Select the numerator objects:CellB2withS3
    Select the numerator measurement:Mean_CellS3InB2Merged_AreaShape_Area
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Object
    Select the denominator objects:CellB2withS3
    Select the denominator measurement:AreaShape_Area
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
FilterObjects:[module_num:83|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
    Select the objects to filter:CellB2withS3
    Name the output objects:MasksRemoveCellB2
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Math_S3toB2Ratio
    Filter using a minimum measurement value?:Yes
    Minimum value:0.6
    Filter using a maximum measurement value?:No
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
MaskObjects:[module_num:84|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
    Select objects to be masked:CellB2
    Name the masked objects:CellB3
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:MasksRemoveCellB2
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    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.1
    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

MaskObjects:[module_num:85|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
    Select objects to be masked:CellS3
    Name the masked objects:CellS4
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CellB3
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    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.1
    Numbering of resulting objects:Renumber
    Invert the mask?:Yes

DefineGrid:[module_num:86|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enabled:False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
    Name the grid:Grid
    Number of rows:8
    Number of columns:12
    Location of the first spot:Top left
    Order of the spots:Rows
    Define a grid for which cycle?:Each cycle
    Select the method to define the grid:Automatic
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    Select the method to define the grid manually:Mouse
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    Coordinates of the first cell:0,0
    Row number of the first cell:1
    Column number of the first cell:1
    Coordinates of the second cell:0,0
    Row number of the second cell:1
    Column number of the second cell:1
    Retain an image of the grid?:No
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    Use a previous grid if gridding fails?:No

CombineObjects:[module_num:87|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
    Select initial object set:CellB3
    Select object set to combine:CellS4
    Select how to handle overlapping objects:Preserve
    Name the combined object set:CombinedCell

CombineObjects:[module_num:88|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
    Select initial object set:NucleiB2
    Select object set to combine:NucleiS2
    Select how to handle overlapping objects:Preserve
    Name the combined object set:CombinedNuclei

RelateObjects:[module_num:89|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
    Parent objects:CombinedCell
    Child objects:CombinedNuclei
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
FilterObjects:[module_num:90|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
    Select the objects to filter:CombinedCell
    Name the output objects:CellWithNuclei
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Children_CombinedNuclei_Count
    Filter using a minimum measurement value?:Yes
    Minimum value:1
    Filter using a maximum measurement value?:No
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
MaskObjects:[module_num:91|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
    Select objects to be masked:CombinedNuclei
    Name the masked objects:NucleiInCell
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:CellWithNuclei
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    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.8
    Numbering of resulting objects:Renumber
    Invert the mask?:No

RelateObjects:[module_num:92|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
    Parent objects:CellWithNuclei
    Child objects:NucleiInCell
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
FilterObjects:[module_num:93|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
    Select the objects to filter:CellWithNuclei
    Name the output objects:Cell
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:Children_NucleiInCell_Count
    Filter using a minimum measurement value?:Yes
    Minimum value:1
    Filter using a maximum measurement value?:No
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
MaskObjects:[module_num:94|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
    Select objects to be masked:NucleiInCell
    Name the masked objects:Nuclei
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Cell
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    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.8
    Numbering of resulting objects:Renumber
    Invert the mask?:No

OverlayOutlines:[module_num:95|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Merge
    Name the output image:Overlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:cyan
    Select objects to display:Nuclei
    Select outline color:#80FF00
    Select objects to display:Cell

SaveImages:[module_num:96|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
    Select the type of image to save:Image
    Select the image to save:Overlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:Merge
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|FinalSegmentation
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

DefineGrid:[module_num:97|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enabled:False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
    Name the grid:Grid
    Number of rows:8
    Number of columns:12
    Location of the first spot:Top left
    Order of the spots:Rows
    Define a grid for which cycle?:Each cycle
    Select the method to define the grid:Automatic
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    Select the method to define the grid manually:Mouse
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    Coordinates of the first cell:0,0
    Row number of the first cell:1
    Column number of the first cell:1
    Coordinates of the second cell:0,0
    Row number of the second cell:1
    Column number of the second cell:1
    Retain an image of the grid?:No
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    Use a previous grid if gridding fails?:No

RelateObjects:[module_num:98|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
    Parent objects:Cell
    Child objects:Nuclei
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
SplitOrMergeObjects:[module_num:99|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
    Select the input objects:Nuclei
    Name the new objects:NucleiMerged
    Operation:Merge
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    Merging method:Per-parent
    Select the parent object:Cell
    Output object type:Disconnected

MaskObjects:[module_num:100|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
    Select objects to be masked:Mitochondria
    Name the masked objects:MaskedMito
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Cell
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    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.8
    Numbering of resulting objects:Renumber
    Invert the mask?:No

MeasureObjectIntensity:[module_num:101|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
    Select images to measure:Mito, Tub
    Select objects to measure:Cell, MaskedMito

MeasureObjectIntensity:[module_num:102|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
    Select images to measure:Mito
    Select objects to measure:MaskedMito

MeasureObjectIntensity:[module_num:103|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
    Select images to measure:Hoechst, Tub
    Select objects to measure:NucleiMerged

MeasureObjectSizeShape:[module_num:104|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
    Select object sets to measure:Cell, MaskedMito, NucleiMerged
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MeasureTexture:[module_num:105|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
    Select images to measure:Mito, Tub
    Select objects to measure:Cell
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Objects
    Texture scale to measure:4

MeasureTexture:[module_num:106|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
    Select images to measure:Hoechst
    Select objects to measure:NucleiMerged
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Objects
    Texture scale to measure:4

MeasureGranularity:[module_num:107|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
    Select images to measure:BF
    Measure within objects?:Yes
    Select objects to measure:Cell
    Subsampling factor for granularity measurements:0.5
    Subsampling factor for background reduction:0.5
    Radius of structuring element:2
    Range of the granular spectrum:2

MeasureGranularity:[module_num:108|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
    Select images to measure:Hoechst
    Measure within objects?:Yes
    Select objects to measure:NucleiMerged
    Subsampling factor for granularity measurements:0.5
    Subsampling factor for background reduction:0.5
    Radius of structuring element:2
    Range of the granular spectrum:2

RelateObjects:[module_num:109|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
    Parent objects:Cell
    Child objects:MaskedMito
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:110|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
    Parent objects:Cell
    Child objects:NucleiMerged
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:Yes
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    Do you want to save the children with parents as a new object set?:No
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
ExportToSpreadsheet:[module_num:111|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Cell|Mean_NucleiMerged_Texture_Entropy_Hoechst_4_00_256,Cell|Mean_NucleiMerged_Texture_Entropy_Hoechst_4_01_256,Cell|Mean_NucleiMerged_Texture_Entropy_Hoechst_4_03_256,Cell|Mean_NucleiMerged_Texture_Entropy_Hoechst_4_02_256,Cell|Mean_NucleiMerged_Texture_DifferenceEntropy_Hoechst_4_03_256,Cell|Mean_NucleiMerged_Texture_DifferenceEntropy_Hoechst_4_00_256,Cell|Mean_NucleiMerged_Texture_DifferenceEntropy_Hoechst_4_02_256,Cell|Mean_NucleiMerged_Texture_DifferenceEntropy_Hoechst_4_01_256,Cell|Mean_NucleiMerged_Texture_Variance_Hoechst_4_03_256,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:H1299_staining
    Overwrite existing files without warning?:No
    Data to export:Cell
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes

OverlayOutlines:[module_num:112|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Mito
    Name the output image:MitoOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#80FF00
    Select objects to display:Cell
    Select outline color:#FF0080
    Select objects to display:MaskedMito

CalculateMath:[module_num:113|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
    Name the output measurement:Measurement
    Operation:None
    Select the numerator measurement type:Object
    Select the numerator objects:MaskedMito
    Select the numerator measurement:Intensity_IntegratedIntensity_Mito
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
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    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    How should the output value be rounded?:Not rounded
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    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
DisplayDataOnImage:[module_num:114|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
    Display object or image measurements?:Object
    Select the input objects:MaskedMito
    Measurement to display:Intensity_IntegratedIntensity_Mito
    Select the image on which to display the measurements:MitoOverlay
    Text color:#FF0080
    Name the output image that has the measurements displayed:DisplayMito
    Font size (points):12
    Number of decimals:0
    Image elements to save:Image
    Annotation offset (in pixels):0
    Display mode:Text
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    Display background image?:Yes
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    Font:Arial
    Use scientific notation?:No
    Font weight:normal

SaveImages:[module_num:115|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
    Select the type of image to save:Image
    Select the image to save:DisplayMito
    Select method for constructing file names:From image filename
    Select image name for file prefix:Mito
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_display
    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|Color
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes
