CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:425
GitHash:
ModuleCount:10
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:(?P<Drug>.*)_(?P<Conc>.*)_(?P<Rep>.*)_R(?P<Field>[0-9])_(?P<Channel>.*).tif
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{'DNA': 'Drug'}, {'DNA': 'Conc'}, {'DNA': 'Rep'}, {'DNA': 'Field'}]
    Image set matching method:Metadata
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    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "ch01")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):15,60
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:4
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.01,1.0
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    Size of adaptive window:300
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    Thresholding method:Sauvola

OverlayOutlines:[module_num:6|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:DNA
    Name the output image:NucleiSeg
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:red
    Select objects to display:Nuclei

SaveImages:[module_num:7|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
    Select the type of image to save:Image
    Select the image to save:NucleiSeg
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:No
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|Result
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

MeasureObjectSizeShape:[module_num:8|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
    Select object sets to measure:Nuclei
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureObjectIntensity:[module_num:9|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
    Select images to measure:DNA
    Select objects to measure:Nuclei

ExportToSpreadsheet:[module_num:10|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|C:\\Leica\\SHSY5Y-2\\72h
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Nuclei|AreaShape_Orientation,Nuclei|AreaShape_EquivalentDiameter,Nuclei|AreaShape_BoundingBoxArea,Nuclei|AreaShape_MeanRadius,Nuclei|AreaShape_Eccentricity,Nuclei|AreaShape_Area,Nuclei|AreaShape_Compactness,Nuclei|AreaShape_ConvexArea,Nuclei|AreaShape_MinFeretDiameter,Nuclei|AreaShape_MaximumRadius,Nuclei|AreaShape_MedianRadius,Nuclei|AreaShape_Center_X,Nuclei|AreaShape_Center_Y,Nuclei|AreaShape_MajorAxisLength,Nuclei|AreaShape_Solidity,Nuclei|AreaShape_EulerNumber,Nuclei|AreaShape_BoundingBoxMinimum_X,Nuclei|AreaShape_BoundingBoxMinimum_Y,Nuclei|AreaShape_BoundingBoxMaximum_Y,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:SHSY5Y-2 H2B Ruby - 5Aza_Etop_Gef_Pan_Das_Dox (72 h)
    Overwrite existing files without warning?:Yes
    Data to export:Nuclei
    Combine these object measurements with those of the previous object?:No
    File name:count.csv
    Use the object name for the file name?:No
